CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:655090_(?P<Well>[A-P][0-9]{1,2})_(?P<Timepoint>[A-z][0-9]{1,4})(?P<FoV>[A-z][0-9]{1,4})(?P<TimeLine>[A-z][0-9]{1,2})(?P<ActionList>[A-z][0-9]{1,2})(?P<Zpos>[A-z][0-9]{1,2})(?P<Channel>[A-z][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C01.tif")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "C02.tif")
    Name to assign these images:Bodipy
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "C03.tif")
    Name to assign these images:CellTrackerRed
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Rescale the three fluorescent images from 0 to 1.']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
    Select the input image:Hoechst
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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notes:['Rescale lipid image']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
    Select the input image:Bodipy
    Name the output image:Bodipy_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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notes:['Rescale cytoplasm stain image']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
    Select the input image:CellTrackerRed
    Name the output image:CellTrackerRed_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Find nuclei. The cells are differentiated from stem cells and can become fat cells (adipocytes) or more like fiborblasts. Fibroblasts nuceli are larger and rounder.', '', 'Robust segmentation is difficult for various reasons. The lipid vesicles either occlude the nuceli or, physically change their shape so that the nuclei are not round as in most cells. Sometimes the entire nucleus is also not visible within the confocal imaging plane. Nuclear intensity also varies. Finally, lipid droplets can work as lenses giving the nuclei a bubbly appearance. Here the original image is used.']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
    Select the input image:Hoechst
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:80
    Suppress local maxima that are closer than this minimum allowed distance:35
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1
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    Size of adaptive window:93
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:9|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notes:['Measure morphological (form) features.']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
    Select object sets to measure:nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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notes:['Measure the intensity of the nuclear stain.']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
    Select images to measure:Hoechst
    Select objects to measure:nuclei

FilterObjects:[module_num:11|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notes:['Filter nuclei. At this point the fibroblast and adipose nuclei could be separated somewhat based on their shape and relationship to lipids, but that is not done in this case. Here, we just want to get rid of incorrectly identified nuclear objects, the apoptotic ones inparticular because they are intensely stained.']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
    Select the objects to filter:nuclei
    Name the output objects:Nuclei_filtered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0
    Filter using a maximum measurement value?:Yes
    Maximum value:1
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Hoechst
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.04

ImageMath:[module_num:12|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notes:['Combine the images of the lipid and cytoplasmic stains to use for segmenting the cell bodies.']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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:lipids_cytoplasm
    Image or measurement?:Image
    Select the first image:Bodipy
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CellTrackerRed
    Multiply the second image by:3
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
IdentifySecondaryObjects:[module_num:13|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notes:['Use the images from the previous steps, together with the nuclei, to identify the cell bodies (cytoplasm). Accurate segmentation of adipocyte cells is difficult and the cell boundaries as determined here are somewhat arbitrary. Here the weighting has been adjusted to create relatively compact objects.']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
    Select the input objects:Nuclei_filtered
    Name the objects to be identified:cell_bodies
    Select the method to identify the secondary objects:Propagation
    Select the input image:lipids_cytoplasm
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    Regularization factor:0.1
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:11
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.34
    Threshold correction factor:0.70
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:185
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    Thresholding method:Minimum Cross-Entropy

FilterObjects:[module_num:14|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notes:['Create a cellular population without edge objects.']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
    Select the objects to filter:cell_bodies
    Name the output objects:cells_no_edge
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Select additional object to relabel:Nuclei_filtered
    Name the relabeled objects:nuclei_no_edge

MeasureObjectSizeShape:[module_num:15|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notes:['Measure the shape of the cell bodies that are not bisected by the edge of the image.']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
    Select object sets to measure:cells_no_edge
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:16|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notes:['Measure the intensity of the cells in the Hoechst, Bodipy and CellTrackerRed channels (lipids and cytoplasm).']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
    Select images to measure:CellTrackerRed
    Select objects to measure:cells_no_edge

MeasureTexture:[module_num:17|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
    Select images to measure:CellTrackerRed
    Select objects to measure:cells_no_edge
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:18|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notes:['export measurement data to CSV file']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop/Hackathon/Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Metadata_Well,Image|Metadata_FoV,Image|Count_cells_no_edge,cells_no_edge|Texture_Variance_CellTrackerRed_3_01_256,cells_no_edge|Texture_Variance_CellTrackerRed_3_02_256,cells_no_edge|Texture_Variance_CellTrackerRed_3_03_256,cells_no_edge|Texture_Variance_CellTrackerRed_3_00_256,cells_no_edge|Texture_SumEntropy_CellTrackerRed_3_03_256,cells_no_edge|Texture_SumEntropy_CellTrackerRed_3_01_256,cells_no_edge|Texture_SumEntropy_CellTrackerRed_3_02_256,cells_no_edge|Texture_SumEntropy_CellTrackerRed_3_00_256,cells_no_edge|Texture_AngularSecondMoment_CellTrackerRed_3_03_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Adipocytes_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
