CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:406
GitHash:
ModuleCount:41
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:655090_(?P<Well>[A-P][0-9]{1,2})_(?P<Timepoint>[A-z][0-9]{1,4})(?P<FoV>[A-z][0-9]{1,4})(?P<TimeLine>[A-z][0-9]{1,2})(?P<ActionList>[A-z][0-9]{1,2})(?P<Zpos>[A-z][0-9]{1,2})(?P<Channel>[A-z][0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C02.tif")
    Name to assign these images:Bodipy
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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notes:['Rescale lipid image']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
    Select the input image:Bodipy
    Name the output image:Bodipy_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['This is the start of the lipid droplet segmentation. CellProfiler has trouble with the large range of sizes. Large droplets and small droplets will be segmented separately. There are also a range of intensities and, the lipid droplets have defects that impair accurate segmentation.', '', 'Enhance small lipid droplets to improve segmentation fidelity.']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
    Select the input image:Bodipy
    Name the output image:Enhance_small_droplets
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
Smooth:[module_num:7|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notes:['Smooth the enhanced droplet image to get rid of the noise.']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
    Select the input image:Enhance_small_droplets
    Name the output image:Enhance_small_droplets_smoothed
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
RescaleIntensity:[module_num:8|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notes:['Rescale the result enhanced droplet image.']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
    Select the input image:Enhance_small_droplets_smoothed
    Name the output image:Enhance_small_droplet_smoothed_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:9|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notes:['Smooth the larger droplets to reduce over segmentation (object fragmentation). Over segmentation is also caused by droplet defects. These could be repaired, but it is complicated to do.']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
    Select the input image:Bodipy
    Name the output image:Large_droplets_smoothed
    Select smoothing method:Circular Average Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:10
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
RescaleIntensity:[module_num:10|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notes:['Rescale large droplet image.']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
    Select the input image:Large_droplets_smoothed
    Name the output image:Large_droplets_smoothed_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:11|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notes:['This is actually a threshold - but it does not create a binary image. It selects the larger brighter lipid droplets from the smoothed large droplet image. This will help to reduce droplet fragementation by smoothing only the large droplets.']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.4
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Large_droplets_smoothed_rescaled_thresholded
    Image or measurement?:Image
    Select the first image:Large_droplets_smoothed_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:12|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notes:['Create new image with smoothed large and enhanced small droplets for segmentation.']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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Droplet_segmentation_image
    Image or measurement?:Image
    Select the first image:Bodipy_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Enhance_small_droplet_smoothed_rescaled
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:Large_droplets_smoothed_rescaled_thresholded
    Multiply the third image by:1.0
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
RescaleIntensity:[module_num:13|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notes:['Rescale the droplet segmentation image again.']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
    Select the input image:Droplet_segmentation_image
    Name the output image:Droplet_segmentation_image_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
IdentifyPrimaryObjects:[module_num:14|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notes:['Identify the small lipid droplets. Standard methods available within CellProfiler are used, with reasonable success. A more complicated method using interval thresholding to identify seeds for secondary segmentation would likely perform better. This segmentation step over segments the larger droplets.']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
    Select the input image:Droplet_segmentation_image_rescaled
    Name the primary objects to be identified:lipid_droplets
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:3
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1
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
IdentifyPrimaryObjects:[module_num:15|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notes:['Use the threshold large droplet image to segment the large lipid droplets separately. ']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
    Select the input image:Large_droplets_smoothed_rescaled_thresholded
    Name the primary objects to be identified:big_droplets
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:5
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:11
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:2
    Lower and upper bounds on threshold:0.2,1.0
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
CombineObjects:[module_num:16|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notes:['Combine the large and small object populations. The larger objects will be merged with the smaller ones where there is overlap, removing much of the large droplet over-segmentation. It’s not perfect though because of defects in the droplets (dents, creases, folds).']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
    Select initial object set:big_droplets
    Select object set to combine:lipid_droplets
    Select how to handle overlapping objects:Merge
    Name the combined object set:Lipid_droplets_final_segmentation

OverlayOutlines:[module_num:17|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notes:['Create an overlay image showing the lipid segmentation.']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Bodipy
    Name the output image:Lipid_droplet_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:Lipid_droplets_final_segmentation

RescaleIntensity:[module_num:18|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notes:['Rescale']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enabled:False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
    Select the input image:Lipid_droplet_overlay
    Name the output image:Lipid_droplet_overlay_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
SaveImages:[module_num:19|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notes:['Save the droplet overlay.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Lipid_droplet_overlay_rescaled
    Select method for constructing file names:From image filename
    Select image name for file prefix:Bodipy
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_droplets
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop/Hackathon/Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
FilterObjects:[module_num:20|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
    Select the objects to filter:Lipid_droplets_final_segmentation
    Name the output objects:Lipids_no_edge
    Select the filtering mode:Image or mask border
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:21|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notes:['Measure shape aspects of the dropletss.']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
    Select object sets to measure:Lipids_no_edge
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageIntensity:[module_num:22|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notes:['Measure the lipid droplet intensities at the image level using the droplet segmentation as a mask.']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
    Select images to measure:Bodipy
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Lipids_no_edge
    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:23|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notes:['Measure the intensity of the lipid droplets at the object level.']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
    Select images to measure:Bodipy
    Select objects to measure:Lipids_no_edge

MeasureGranularity:[module_num:24|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
    Select images to measure:Bodipy
    Measure within objects?:No
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    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

EnhanceOrSuppressFeatures:[module_num:25|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notes:['This section attempts to quantify texture in the lipid droplets. The droplets have ”defects” like holes, creases or folds. Detecting these features is quite hard to do because there are also dark areas between the droplets.', 'Enhance high frequency features.']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
    Select the input image:Bodipy_rescaled
    Name the output image:Enhance_speckles
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
RescaleIntensity:[module_num:26|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notes:['Rescale.']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
    Select the input image:Enhance_speckles
    Name the output image:Enhance_speckles_rescale
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:27|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notes:['Enhance the high-frequency bright features to create more contrast to the darker features.']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
    Operation:Average
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Enhance_holes_step1
    Image or measurement?:Image
    Select the first image:Bodipy_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Enhance_speckles_rescale
    Multiply the second image by:2.0
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
RescaleIntensity:[module_num:28|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notes:['Rescale.']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
    Select the input image:Enhance_holes_step1
    Name the output image:Enhance_holes_step1_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
EnhanceOrSuppressFeatures:[module_num:29|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notes:['Enhance high frequency dark features.']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
    Select the input image:Enhance_holes_step1_rescaled
    Name the output image:Enhance_holes_step2
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:3,10
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
RescaleIntensity:[module_num:30|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notes:['Rescale.']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
    Select the input image:Enhance_holes_step2
    Name the output image:Enhance_holes_step2_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:31|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notes:['This step is used to suppress the dark area found between the droplets, as the holes in the droplets usually have higher intensity.']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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Droplet_defects
    Image or measurement?:Image
    Select the first image:Bodipy_rescaled
    Multiply the first image by:5.0
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    Image or measurement?:Image
    Select the second image:Enhance_holes_step2_rescaled
    Multiply the second image by:1.0
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
RescaleIntensity:[module_num:32|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notes:['Rescale….']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
    Select the input image:Droplet_defects
    Name the output image:Droplet_defects_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
ExpandOrShrinkObjects:[module_num:33|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notes:['Erode the lipid droplet masks a little.']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
    Select the input objects:Lipid_droplets_final_segmentation
    Name the output objects:Lipid_droplets_final_segmentation_shrink
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:No

MaskImage:[module_num:34|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notes:['Mask the image with the defects using the eroded lipid droplet mask - this also helps to suppress "hole" signals between the droplets. Over segmentation of the lipid droplets creates problems here.']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
    Select the input image:Droplet_defects_rescaled
    Name the output image:Defect_image_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Lipid_droplets_final_segmentation_shrink
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    Invert the mask?:No

ImageMath:[module_num:35|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notes:['Threshold the resulting defect image to remove the suppressed signals.']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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:-0.5
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Defect_image_masked_thresholded
    Image or measurement?:Image
    Select the first image:Droplet_defects_rescaled
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:36|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notes:['Rescale.']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
    Select the input image:Defect_image_masked_thresholded
    Name the output image:Defect_image_rescaled
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectIntensity:[module_num:37|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notes:['Measure the intensity of the defects inside the droplets.']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
    Select images to measure:Defect_image_rescaled
    Select objects to measure:Lipids_no_edge

FilterObjects:[module_num:38|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notes:['Filter the droplets based on the intensity of the defect signals.']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
    Select the objects to filter:Lipids_no_edge
    Name the output objects:Defective_lipid_droplets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Defect_image_rescaled
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
GrayToColor:[module_num:39|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notes:['Create an overlay showing the droplet defects.']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enabled:False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
    Select a color scheme:RGB
    Rescale intensity:Yes
    Select the image to be colored red:Bodipy_rescaled
    Select the image to be colored green:Defect_image_rescaled
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    Name the output image:Droplet_defect_color_overlay
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
SaveImages:[module_num:40|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notes:['Save defect overlay']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Droplet_defect_color_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Bodipy
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_defects
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop/Hackathon/Output
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:41|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notes:['export measurement data to CSV file']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Desktop/Hackathon/Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Granularity_9_Bodipy,Image|Granularity_11_Bodipy,Image|Granularity_7_Bodipy,Image|Granularity_6_Bodipy,Image|Granularity_1_Bodipy,Image|Granularity_12_Bodipy,Image|Granularity_4_Bodipy,Image|Granularity_15_Bodipy,Image|Granularity_2_Bodipy,Image|Granularity_10_Bodipy,Image|Granularity_5_Bodipy,Image|Granularity_14_Bodipy,Image|Granularity_16_Bodipy,Image|Granularity_3_Bodipy,Image|Granularity_8_Bodipy,Image|Granularity_13_Bodipy,Image|Count_Lipids_no_edge,Image|Count_Defective_lipid_droplets,Image|Metadata_Well,Image|Metadata_FoV,Lipids_no_edge|AreaShape_Perimeter,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Adipocytes_
    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
